Indefinite_Integral
/SIGNAL_TYPES=ANALOG
/SIGNAL_FOLDER=ORIGINAL
! /SIGNAL_NAMES=
! /RESULT_TYPES=
/RESULT_FOLDERS=SPYDER_INTEGRATION/LINREG
! /RESULT_NAME=
! /APPLY_AS_SUFFIX_TO_SIGNAL_NAME=FALSE
! /EVENT_SEQUENCE=
! /EXCLUDE_EVENTS=
! /EVENT_INSTANCE=0
! /INITIAL_VALUE=0
;

Copy_Folder
/SIGNAL_TYPES=ANALOG
/EXISTING_FOLDER=SPYDER_INTEGRATION/LINREG
/NEW_FOLDER_NAME=ALL_SIGNAL_INTEGRATED
! /OVERWRITE_EXISTING_SIGNALS=FALSE
;

Export_Data_To_Ascii_File
/SIGNAL_TYPES=ANALOG
/SIGNAL_FOLDER=SPYDER_INTEGRATION/LINREG
/SIGNAL_NAMES=Trigno sensor 10: Acc 10.X
! /FILE_NAME=
! /SIGNAL_COMPONENTS=
/COMPONENT_SEQUENCE=ALL
! /SIGNAL_PRECISION=
! /EVENT_SEQUENCE=
! /EXCLUDE_EVENTS=
! /USE_POINT_RATE=FALSE
! /NORMALIZE_DATA=FALSE
! /NORMALIZE_POINTS=101
! /EXPORT_MEAN_AND_STD_DEV=FALSE
! /USE_P2D_FORMAT=FALSE
! /USE_XML_FORMAT=FALSE
! /USE_SHORT_FILENAME=FALSE
! /EXPORT_EMPTY_SIGNALS=FALSE
! /EXPORT_WITHOUT_HEADER=FALSE
! /EXPORT_NAN=FALSE
! /USE_SCIENTIFIC_NOTATION=FALSE
;

Import_Data_From_Ascii_File
! /FILE_NAME=
! /FOLDER=
! /FILTER=txt
! /SET_PROMPT=Import Signals From ASCII file
! /BUFFER_DERIVED=TRUE
;

Remove_Signals
/SIGNAL_TYPES=ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG+ANALOG
/SIGNAL_FOLDER=SPYDER_INTEGRATION/LINREG+SPYDER_INTEGRATION/LINREG+SPYDER_INTEGRATION/LINREG+SPYDER_INTEGRATION/LINREG+SPYDER_INTEGRATION/LINREG+SPYDER_INTEGRATION/LINREG+SPYDER_INTEGRATION/LINREG+SPYDER_INTEGRATION/LINREG+SPYDER_INTEGRATION/LINREG+SPYDER_INTEGRATION/LINREG+SPYDER_INTEGRATION/LINREG+SPYDER_INTEGRATION/LINREG+SPYDER_INTEGRATION/LINREG+SPYDER_INTEGRATION/LINREG+SPYDER_INTEGRATION/LINREG+SPYDER_INTEGRATION/LINREG+SPYDER_INTEGRATION/LINREG+SPYDER_INTEGRATION/LINREG+SPYDER_INTEGRATION/LINREG+SPYDER_INTEGRATION/LINREG+SPYDER_INTEGRATION/LINREG+SPYDER_INTEGRATION/LINREG+SPYDER_INTEGRATION/LINREG+SPYDER_INTEGRATION/LINREG+SPYDER_INTEGRATION/LINREG+SPYDER_INTEGRATION/LINREG+SPYDER_INTEGRATION/LINREG+SPYDER_INTEGRATION/LINREG+SPYDER_INTEGRATION/LINREG+SPYDER_INTEGRATION/LINREG+SPYDER_INTEGRATION/LINREG+SPYDER_INTEGRATION/LINREG+SPYDER_INTEGRATION/LINREG+SPYDER_INTEGRATION/LINREG+SPYDER_INTEGRATION/LINREG+SPYDER_INTEGRATION/LINREG+SPYDER_INTEGRATION/LINREG+SPYDER_INTEGRATION/LINREG+SPYDER_INTEGRATION/LINREG+SPYDER_INTEGRATION/LINREG+SPYDER_INTEGRATION/LINREG+SPYDER_INTEGRATION/LINREG+SPYDER_INTEGRATION/LINREG+SPYDER_INTEGRATION/LINREG+SPYDER_INTEGRATION/LINREG+SPYDER_INTEGRATION/LINREG+SPYDER_INTEGRATION/LINREG+SPYDER_INTEGRATION/LINREG+SPYDER_INTEGRATION/LINREG+SPYDER_INTEGRATION/LINREG+SPYDER_INTEGRATION/LINREG
/SIGNAL_NAMES=Trigno FSR Adapter 15: FSR 15.A+Trigno FSR Adapter 15: FSR 15.B+Trigno FSR Adapter 15: FSR 15.C+Trigno FSR Adapter 15: FSR 15.D+Trigno FSR Adapter 16: FSR 16.A+Trigno FSR Adapter 16: FSR 16.B+Trigno FSR Adapter 16: FSR 16.C+Trigno FSR Adapter 16: FSR 16.D+Trigno sensor 10: Acc 10.Y+Trigno sensor 10: Acc 10.Z+Trigno sensor 10: EMG 10+Trigno sensor 11: Acc 11.X+Trigno sensor 11: Acc 11.Y+Trigno sensor 11: Acc 11.Z+Trigno sensor 11: EMG 11+Trigno sensor 1: Acc 1.X+Trigno sensor 1: Acc 1.Y+Trigno sensor 1: Acc 1.Z+Trigno sensor 1: EMG 1+Trigno sensor 2: Acc 2.X+Trigno sensor 2: Acc 2.Y+Trigno sensor 2: Acc 2.Z+Trigno sensor 2: EMG 2+Trigno sensor 3: Acc 3.X+Trigno sensor 3: Acc 3.Y+Trigno sensor 3: Acc 3.Z+Trigno sensor 3: EMG 3+Trigno sensor 4: Acc 4.X+Trigno sensor 4: Acc 4.Y+Trigno sensor 4: Acc 4.Z+Trigno sensor 4: EMG 4+Trigno sensor 5: Acc 5.X+Trigno sensor 5: Acc 5.Y+Trigno sensor 5: Acc 5.Z+Trigno sensor 5: EMG 5+Trigno sensor 6: Acc 6.X+Trigno sensor 6: Acc 6.Y+Trigno sensor 6: Acc 6.Z+Trigno sensor 6: EMG 6+Trigno sensor 7: Acc 7.X+Trigno sensor 7: Acc 7.Y+Trigno sensor 7: Acc 7.Z+Trigno sensor 7: EMG 7+Trigno sensor 8: Acc 8.X+Trigno sensor 8: Acc 8.Y+Trigno sensor 8: Acc 8.Z+Trigno sensor 8: EMG 8+Trigno sensor 9: Acc 9.X+Trigno sensor 9: Acc 9.Y+Trigno sensor 9: Acc 9.Z+Trigno sensor 9: EMG 9
! /INCLUDE_MODELS=FALSE
;

